<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:drw="clr-namespace:Bonsai.Vision.Drawing;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Video Aquisition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>File Name</Name>
              <Description />
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Directory" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>C:\STFP\</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Folder" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Family\</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Group" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Family</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>_</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Phase" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Hab</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>_</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>Filename</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="10" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="10" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="10" Label="Source3" />
                  <Edge From="6" To="10" Label="Source4" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="10" Label="Source5" />
                  <Edge From="9" To="10" Label="Source6" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Boxes</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Box1" Category="Boxes" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Demo</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>Box1</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Box2" Category="Boxes" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>L</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>Box2</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Box3" Category="Boxes" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>R</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>Box3</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Box4" Category="Boxes" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>LL</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>Box4</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Box5" Category="Boxes" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>RR</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>Box5</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>File types</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName=".CSV" Category="Filetypes" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>.CSV</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>.CSV</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName=".AVI" Category="Filetypes" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>.AVI</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>.AVI</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName=".WAV" Category="Filetypes" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>.WAV</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>.WAV</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName=".PNG" Category="Filetypes" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>.PNG</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>.PNG</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:VideoCaptureDevice">
                <p1:Index>0</p1:Index>
                <p1:Format>
                  <p1:FrameSize>
                    <p1:Width>1600</p1:Width>
                    <p1:Height>1200</p1:Height>
                  </p1:FrameSize>
                  <p1:AverageFrameRate>30</p1:AverageFrameRate>
                  <p1:MaximumFrameRate>50</p1:MaximumFrameRate>
                  <p1:BitCount>24</p1:BitCount>
                </p1:Format>
                <p1:CaptureProperties />
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Video</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Video</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SampleInterval">
                <rx:Interval>PT0.0333333S</rx:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Filename</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>.CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName />
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Video</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="drw:CreateCanvas">
                <drw:Size>
                  <drw:Width>320</drw:Width>
                  <drw:Height>240</drw:Height>
                </drw:Size>
                <drw:Depth>U8</drw:Depth>
                <drw:Channels>3</drw:Channels>
                <drw:Color>
                  <drw:Val0>0</drw:Val0>
                  <drw:Val1>0</drw:Val1>
                  <drw:Val2>0</drw:Val2>
                  <drw:Val3>0</drw:Val3>
                </drw:Color>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp.TimeOfDay.TotalMinutes</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Difference">
                <dsp:Order>1</dsp:Order>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Add">
              <Operand xsi:type="DoubleProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0:F2}</Format>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="drw:AddTextBox">
                <drw:Text>1.71</drw:Text>
                <drw:Alignment>Center</drw:Alignment>
                <drw:LineAlignment>Center</drw:LineAlignment>
                <drw:TextRenderingHint>AntiAliasGridFit</drw:TextRenderingHint>
                <drw:Color>
                  <drw:Val0>255</drw:Val0>
                  <drw:Val1>255</drw:Val1>
                  <drw:Val2>255</drw:Val2>
                  <drw:Val3>255</drw:Val3>
                </drw:Color>
                <drw:Font>Microsoft Sans Serif, 48pt</drw:Font>
                <drw:Destination>
                  <drw:X>0</drw:X>
                  <drw:Y>0</drw:Y>
                  <drw:Width>0</drw:Width>
                  <drw:Height>0</drw:Height>
                </drw:Destination>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="drw:DrawCanvas" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Filename</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>.AVI</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName />
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="17" Label="Source1" />
            <Edge From="7" To="25" Label="Source1" />
            <Edge From="8" To="14" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="23" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="25" To="31" Label="Source1" />
            <Edge From="26" To="28" Label="Source1" />
            <Edge From="27" To="28" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DueTime" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1H5M</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>