WorkflowBuilder(Version=2.8.1)
ExternalizedMapping(SearchPattern, Path)
-> Bonsai.IO.GetFiles(Path=H:\Temp, SearchPattern=*.AVI, SearchOption=AllDirectories)
-> SelectMany FileNames => #2
    WorkflowInput Source1
    -> Merge
    -> WorkflowOutput
ExternalizedMapping("Save Directory") => #3
#2, #3 -> CreateObservable ProcessVideo
  Description:
    Reads file names and loads corresponding bowl and box locations determined from SetROI.bonsai
    - Set threshold value to allow only visualization of animals as the largest binary object in ROI
    - Activate Cen_Vis to visualise single animal trajectory
    - Disable Cen_Vis when computing actual centroid positions
  Workflow
    SubscribeSubject Video
    -> GroupWorkflow Fname(Description="*Double click to display current file name")
        WorkflowInput Source1
        -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=500, Height=240), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #1
        SubscribeSubject Filename
        -> Bonsai.IO.GetFileNameWithoutExtension
        -> PropertyMapping(Text) => #4
        #1, #4 -> Bonsai.Vision.Drawing.AddTextBox
          Text=C11_Hab_2022-08-17T10_49_25
          Alignment=Center
          LineAlignment=Center
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=255, Val1=255, Val2=255, Val3=255)
          Font="Microsoft Sans Serif, 48pt"
          Destination(X=0, Y=0, Width=0, Height=0)
        -> Bonsai.Vision.Drawing.DrawCanvas
        -> WorkflowOutput

    GroupWorkflow Animals(Description="Labels output files based on animal name")
        SubscribeSubject Savename => #0
        StringProperty(Value=_) => #1
        ExternalizedMapping(Value(DisplayName=Box1, Category=Animals))
        -> StringProperty(Value=Demo) => #3
        #0, #1, #3 -> Zip
        -> Add
        -> ReplaySubject Box1(BufferSize=nil)

        SubscribeSubject Savename => #7
        StringProperty(Value=_) => #8
        ExternalizedMapping(Value(DisplayName=Box2, Category=Animals))
        -> StringProperty(Value=L) => #10
        #7, #8, #10 -> Zip
        -> Add
        -> ReplaySubject Box2(BufferSize=nil)

        SubscribeSubject Savename => #14
        StringProperty(Value=_) => #15
        ExternalizedMapping(Value(DisplayName=Box3, Category=Animals))
        -> StringProperty(Value=R) => #17
        #14, #15, #17 -> Zip
        -> Add
        -> ReplaySubject Box3(BufferSize=nil)

        SubscribeSubject Savename => #21
        StringProperty(Value=_) => #22
        ExternalizedMapping(Value(DisplayName=Box4, Category=Animals))
        -> StringProperty(Value=LL) => #24
        #21, #22, #24 -> Zip
        -> Add
        -> ReplaySubject Box4(BufferSize=nil)

        SubscribeSubject Savename => #28
        StringProperty(Value=_) => #29
        ExternalizedMapping(Value(DisplayName=Box5, Category=Animals))
        -> StringProperty(Value=RR) => #31
        #28, #29, #31 -> Zip
        -> Add
        -> ReplaySubject Box5(BufferSize=nil)

    WorkflowInput Source1
    -> ReplaySubject Filename(BufferSize=nil)

    ExternalizedMapping(Value(DisplayName="Save Directory"))
    -> StringProperty(Value=H:\Temp\Analysis\) => #6
    SubscribeSubject Filename
    -> Bonsai.IO.GetFileNameWithoutExtension => #8
    #6, #8 -> Zip
    -> Add
    -> ReplaySubject Savename(BufferSize=nil)

    SubscribeSubject Filename
    -> PropertyMapping(FileName) => #13
    ExternalizedMapping(Value(DisplayName=Speedup, Category=InputProperties))
    -> IntProperty(Value=10)
    -> ReplaySubject Speedup(BufferSize=nil) => #16
    ExternalizedMapping(Value(DisplayName=RecordRate, Category=InputProperties))
    -> IntProperty(Value=30)
    -> ReplaySubject RecordingRate(BufferSize=nil)
    -> PropertyMapping(Value) => #20
    #16, #20 -> Multiply(Operand=IntProperty(Value=30))
    -> ReplaySubject PlaybackRate(BufferSize=nil)
    -> PropertyMapping(PlaybackRate(Selector=it)) => #23
    ExternalizedMapping(Value(DisplayName=StartFrame, Category=InputProperties))
    -> IntProperty(Value=0)
    -> PublishSubject StartFrame
    -> PropertyMapping(StartPosition) => #27
    #13, #23, #27 -> Bonsai.Vision.FileCapture(FileName=H:\Temp\C11_Hab_2022-08-17T10_49_25.AVI, PlaybackRate=300, StartPosition=0, PositionUnits=Frames, Loop=false, Playing=true)
    -> PublishSubject Video

    SubscribeSubject Video
    -> ElementIndex => #31
    -> MemberSelector(Selector=Value)
    -> Bonsai.Vision.Grayscale => #33
    ExternalizedMapping(ThresholdValue) => #34
    #33, #34 -> Bonsai.Vision.Threshold(ThresholdValue=8, MaxValue=255, ThresholdType=BinaryInv) => #35
    SubscribeSubject Savename => #36
    ExternalizedMapping(Format(DisplayName=Bowl_csv)) => #37
    #36, #37 -> Format(Format={0}_bowl.csv)
    -> PropertyMapping(FileName)
    -> Bonsai.IO.CsvReader(FileName=H:\Temp\Analysis\C11_Hab_2022-08-17T10_49_25_bowl.csv, ListSeparator=;, ScanPattern="%i,%i", SkipRows=1)
    -> SelectMany Read_Roi
        WorkflowInput Source1
        -> Merge
        -> InputMapping(X(Selector=Item1), Y(Selector=Item2))
        -> Bonsai.Vision.CreatePoint(X=487, Y=200)
        -> ToArray
        -> WorkflowOutput
    -> ToArray
    -> PropertyMapping(Regions(Selector=it)) => #43
    #35, #43 -> Bonsai.Vision.RoiActivity => #44
      Regions
        ArrayOfPoint
          Point(X=189, Y=76)
          Point(X=189, Y=77)
          Point(X=189, Y=79)
          Point(X=187, Y=80)
          Point(X=187, Y=82)
          Point(X=185, Y=83)
          Point(X=184, Y=83)
          Point(X=182, Y=85)
          Point(X=180, Y=85)
          Point(X=179, Y=85)
          Point(X=177, Y=85)
          Point(X=175, Y=85)
          Point(X=174, Y=83)
          Point(X=172, Y=83)
          Point(X=170, Y=82)
          Point(X=170, Y=80)
          Point(X=169, Y=79)
          Point(X=169, Y=77)
          Point(X=169, Y=76)
          Point(X=169, Y=74)
          Point(X=169, Y=73)
          Point(X=170, Y=71)
          Point(X=170, Y=70)
          Point(X=172, Y=68)
          Point(X=174, Y=68)
          Point(X=175, Y=67)
          Point(X=177, Y=67)
          Point(X=179, Y=67)
          Point(X=180, Y=67)
          Point(X=182, Y=67)
          Point(X=184, Y=68)
          Point(X=185, Y=68)
          Point(X=187, Y=70)
          Point(X=187, Y=71)
          Point(X=189, Y=73)
          Point(X=189, Y=74)
        ArrayOfPoint
          Point(X=183, Y=197)
          Point(X=183, Y=198)
          Point(X=183, Y=200)
          Point(X=181, Y=201)
          Point(X=181, Y=203)
          Point(X=179, Y=204)
          Point(X=178, Y=204)
          Point(X=176, Y=206)
          Point(X=174, Y=206)
          Point(X=173, Y=206)
          Point(X=171, Y=206)
          Point(X=169, Y=206)
          Point(X=168, Y=204)
          Point(X=166, Y=204)
          Point(X=164, Y=203)
          Point(X=164, Y=201)
          Point(X=163, Y=200)
          Point(X=163, Y=198)
          Point(X=163, Y=197)
          Point(X=163, Y=195)
          Point(X=163, Y=194)
          Point(X=164, Y=192)
          Point(X=164, Y=191)
          Point(X=166, Y=189)
          Point(X=168, Y=189)
          Point(X=169, Y=188)
          Point(X=171, Y=188)
          Point(X=173, Y=188)
          Point(X=174, Y=188)
          Point(X=176, Y=188)
          Point(X=178, Y=189)
          Point(X=179, Y=189)
          Point(X=181, Y=191)
          Point(X=181, Y=192)
          Point(X=183, Y=194)
          Point(X=183, Y=195)
        ArrayOfPoint
          Point(X=338, Y=270)
          Point(X=338, Y=271)
          Point(X=338, Y=273)
          Point(X=336, Y=274)
          Point(X=336, Y=276)
          Point(X=334, Y=277)
          Point(X=333, Y=277)
          Point(X=331, Y=279)
          Point(X=329, Y=279)
          Point(X=328, Y=279)
          Point(X=326, Y=279)
          Point(X=324, Y=279)
          Point(X=323, Y=277)
          Point(X=321, Y=277)
          Point(X=319, Y=276)
          Point(X=319, Y=274)
          Point(X=318, Y=273)
          Point(X=318, Y=271)
          Point(X=318, Y=270)
          Point(X=318, Y=268)
          Point(X=318, Y=267)
          Point(X=319, Y=265)
          Point(X=319, Y=264)
          Point(X=321, Y=262)
          Point(X=323, Y=262)
          Point(X=324, Y=261)
          Point(X=326, Y=261)
          Point(X=328, Y=261)
          Point(X=329, Y=261)
          Point(X=331, Y=261)
          Point(X=333, Y=262)
          Point(X=334, Y=262)
          Point(X=336, Y=264)
          Point(X=336, Y=265)
          Point(X=338, Y=267)
          Point(X=338, Y=268)
        ArrayOfPoint
          Point(X=335, Y=401)
          Point(X=335, Y=402)
          Point(X=335, Y=404)
          Point(X=333, Y=405)
          Point(X=333, Y=407)
          Point(X=331, Y=408)
          Point(X=330, Y=408)
          Point(X=328, Y=410)
          Point(X=326, Y=410)
          Point(X=325, Y=410)
          Point(X=323, Y=410)
          Point(X=321, Y=410)
          Point(X=320, Y=408)
          Point(X=318, Y=408)
          Point(X=316, Y=407)
          Point(X=316, Y=405)
          Point(X=315, Y=404)
          Point(X=315, Y=402)
          Point(X=315, Y=401)
          Point(X=315, Y=399)
          Point(X=315, Y=398)
          Point(X=316, Y=396)
          Point(X=316, Y=395)
          Point(X=318, Y=393)
          Point(X=320, Y=393)
          Point(X=321, Y=392)
          Point(X=323, Y=392)
          Point(X=325, Y=392)
          Point(X=326, Y=392)
          Point(X=328, Y=392)
          Point(X=330, Y=393)
          Point(X=331, Y=393)
          Point(X=333, Y=395)
          Point(X=333, Y=396)
          Point(X=335, Y=398)
          Point(X=335, Y=399)
        ArrayOfPoint
          Point(X=486, Y=273)
          Point(X=486, Y=274)
          Point(X=486, Y=276)
          Point(X=484, Y=277)
          Point(X=484, Y=279)
          Point(X=482, Y=280)
          Point(X=481, Y=280)
          Point(X=479, Y=282)
          Point(X=477, Y=282)
          Point(X=476, Y=282)
          Point(X=474, Y=282)
          Point(X=472, Y=282)
          Point(X=471, Y=280)
          Point(X=469, Y=280)
          Point(X=467, Y=279)
          Point(X=467, Y=277)
          Point(X=466, Y=276)
          Point(X=466, Y=274)
          Point(X=466, Y=273)
          Point(X=466, Y=271)
          Point(X=466, Y=270)
          Point(X=467, Y=268)
          Point(X=467, Y=267)
          Point(X=469, Y=265)
          Point(X=471, Y=265)
          Point(X=472, Y=264)
          Point(X=474, Y=264)
          Point(X=476, Y=264)
          Point(X=477, Y=264)
          Point(X=479, Y=264)
          Point(X=481, Y=265)
          Point(X=482, Y=265)
          Point(X=484, Y=267)
          Point(X=484, Y=268)
          Point(X=486, Y=270)
          Point(X=486, Y=271)
        ArrayOfPoint
          Point(X=485, Y=406)
          Point(X=485, Y=407)
          Point(X=485, Y=409)
          Point(X=483, Y=410)
          Point(X=483, Y=412)
          Point(X=481, Y=413)
          Point(X=480, Y=413)
          Point(X=478, Y=415)
          Point(X=476, Y=415)
          Point(X=475, Y=415)
          Point(X=473, Y=415)
          Point(X=471, Y=415)
          Point(X=470, Y=413)
          Point(X=468, Y=413)
          Point(X=466, Y=412)
          Point(X=466, Y=410)
          Point(X=465, Y=409)
          Point(X=465, Y=407)
          Point(X=465, Y=406)
          Point(X=465, Y=404)
          Point(X=465, Y=403)
          Point(X=466, Y=401)
          Point(X=466, Y=400)
          Point(X=468, Y=398)
          Point(X=470, Y=398)
          Point(X=471, Y=397)
          Point(X=473, Y=397)
          Point(X=475, Y=397)
          Point(X=476, Y=397)
          Point(X=478, Y=397)
          Point(X=480, Y=398)
          Point(X=481, Y=398)
          Point(X=483, Y=400)
          Point(X=483, Y=401)
          Point(X=485, Y=403)
          Point(X=485, Y=404)
        ArrayOfPoint
          Point(X=338, Y=65)
          Point(X=338, Y=66)
          Point(X=338, Y=68)
          Point(X=336, Y=69)
          Point(X=336, Y=71)
          Point(X=334, Y=72)
          Point(X=333, Y=72)
          Point(X=331, Y=74)
          Point(X=329, Y=74)
          Point(X=328, Y=74)
          Point(X=326, Y=74)
          Point(X=324, Y=74)
          Point(X=323, Y=72)
          Point(X=321, Y=72)
          Point(X=319, Y=71)
          Point(X=319, Y=69)
          Point(X=318, Y=68)
          Point(X=318, Y=66)
          Point(X=318, Y=65)
          Point(X=318, Y=63)
          Point(X=318, Y=62)
          Point(X=319, Y=60)
          Point(X=319, Y=59)
          Point(X=321, Y=57)
          Point(X=323, Y=57)
          Point(X=324, Y=56)
          Point(X=326, Y=56)
          Point(X=328, Y=56)
          Point(X=329, Y=56)
          Point(X=331, Y=56)
          Point(X=333, Y=57)
          Point(X=334, Y=57)
          Point(X=336, Y=59)
          Point(X=336, Y=60)
          Point(X=338, Y=62)
          Point(X=338, Y=63)
        ArrayOfPoint
          Point(X=335, Y=198)
          Point(X=335, Y=199)
          Point(X=335, Y=201)
          Point(X=333, Y=202)
          Point(X=333, Y=204)
          Point(X=331, Y=205)
          Point(X=330, Y=205)
          Point(X=328, Y=207)
          Point(X=326, Y=207)
          Point(X=325, Y=207)
          Point(X=323, Y=207)
          Point(X=321, Y=207)
          Point(X=320, Y=205)
          Point(X=318, Y=205)
          Point(X=316, Y=204)
          Point(X=316, Y=202)
          Point(X=315, Y=201)
          Point(X=315, Y=199)
          Point(X=315, Y=198)
          Point(X=315, Y=196)
          Point(X=315, Y=195)
          Point(X=316, Y=193)
          Point(X=316, Y=192)
          Point(X=318, Y=190)
          Point(X=320, Y=190)
          Point(X=321, Y=189)
          Point(X=323, Y=189)
          Point(X=325, Y=189)
          Point(X=326, Y=189)
          Point(X=328, Y=189)
          Point(X=330, Y=190)
          Point(X=331, Y=190)
          Point(X=333, Y=192)
          Point(X=333, Y=193)
          Point(X=335, Y=195)
          Point(X=335, Y=196)
        ArrayOfPoint
          Point(X=488, Y=69)
          Point(X=488, Y=70)
          Point(X=488, Y=72)
          Point(X=486, Y=73)
          Point(X=486, Y=75)
          Point(X=484, Y=76)
          Point(X=483, Y=76)
          Point(X=481, Y=78)
          Point(X=479, Y=78)
          Point(X=478, Y=78)
          Point(X=476, Y=78)
          Point(X=474, Y=78)
          Point(X=473, Y=76)
          Point(X=471, Y=76)
          Point(X=469, Y=75)
          Point(X=469, Y=73)
          Point(X=468, Y=72)
          Point(X=468, Y=70)
          Point(X=468, Y=69)
          Point(X=468, Y=67)
          Point(X=468, Y=66)
          Point(X=469, Y=64)
          Point(X=469, Y=63)
          Point(X=471, Y=61)
          Point(X=473, Y=61)
          Point(X=474, Y=60)
          Point(X=476, Y=60)
          Point(X=478, Y=60)
          Point(X=479, Y=60)
          Point(X=481, Y=60)
          Point(X=483, Y=61)
          Point(X=484, Y=61)
          Point(X=486, Y=63)
          Point(X=486, Y=64)
          Point(X=488, Y=66)
          Point(X=488, Y=67)
        ArrayOfPoint
          Point(X=487, Y=202)
          Point(X=487, Y=203)
          Point(X=487, Y=205)
          Point(X=485, Y=206)
          Point(X=485, Y=208)
          Point(X=483, Y=209)
          Point(X=482, Y=209)
          Point(X=480, Y=211)
          Point(X=478, Y=211)
          Point(X=477, Y=211)
          Point(X=475, Y=211)
          Point(X=473, Y=211)
          Point(X=472, Y=209)
          Point(X=470, Y=209)
          Point(X=468, Y=208)
          Point(X=468, Y=206)
          Point(X=467, Y=205)
          Point(X=467, Y=203)
          Point(X=467, Y=202)
          Point(X=467, Y=200)
          Point(X=467, Y=199)
          Point(X=468, Y=197)
          Point(X=468, Y=196)
          Point(X=470, Y=194)
          Point(X=472, Y=194)
          Point(X=473, Y=193)
          Point(X=475, Y=193)
          Point(X=477, Y=193)
          Point(X=478, Y=193)
          Point(X=480, Y=193)
          Point(X=482, Y=194)
          Point(X=483, Y=194)
          Point(X=485, Y=196)
          Point(X=485, Y=197)
          Point(X=487, Y=199)
          Point(X=487, Y=200)
      Operation=Sum
    #31 -> MemberSelector(Selector=Index) => #45
    #44, #45 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as Activity,
        Item2 as FrameIndex)
    -> SelectMany ActivityIndex
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=FrameIndex) => #1
        #0 -> MemberSelector(Selector=Activity)
        -> Merge
        -> MemberSelector(Selector=Activity.Val0)
        -> ElementIndex => #5
        #1, #5 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as FrameIndex,
            Item2.Value as Activity,
            Item2.Index as RoiIndex)
        -> WorkflowOutput
    -> GroupBy(KeySelector=RoiIndex, ElementSelector="")
    -> SelectMany DetectEntryToExit => #50
        WorkflowInput Source1 => #0
        -> Merge => #1
        -> MemberSelector(Selector=Activity)
        -> GreaterThan(Operand=DoubleProperty(Value=0)) => #3
        #1 -> MemberSelector(Selector=FrameIndex) => #4
        #3, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as RoiState,
            Item2 as FrameIndex)
        -> DistinctUntilChangedBy(KeySelector=RoiState) => #7
        #0 -> MemberSelector(Selector=Key) => #8
        #7, #8 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
          Expression:
            new(
            Item2 as RoiIndex,
            Item1.RoiState as RoiState,
            Item1.FrameIndex as FrameIndex)
        -> Skip(Count=1) => #11
        #11, #10 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1.RoiIndex as RoiIndex,
            Item1.RoiState as RoiState,
            Item1.FrameIndex - Item2.FrameIndex as FramesSinceLastState)
        -> Disable Condition EntryToExitOnly
            WorkflowInput Source1
            -> MemberSelector(Selector=RoiState)
            -> BitwiseNot
            -> WorkflowOutput
        -> WorkflowOutput
    SubscribeSubject Savename => #51
    ExternalizedMapping(Format(DisplayName=Bowl_Time)) => #52
    #51, #52 -> Format(Format={0}_bowl_time.csv)
    -> PropertyMapping(FileName(Selector=it)) => #54
    #50, #54 -> Bonsai.IO.CsvWriter(FileName=H:\Temp\Analysis\C9_Test_2022-08-12T12_10_23_bowl_time.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)
    SubscribeSubject Video
    -> Bonsai.Vision.Grayscale => #57
    #57, #34 -> Bonsai.Vision.Threshold(ThresholdValue=8, MaxValue=255, ThresholdType=BinaryInv) => #58
    SubscribeSubject Savename => #59
    ExternalizedMapping(Format(DisplayName=Box_csv)) => #60
    #59, #60 -> Format(Format={0}_box.csv)
    -> PropertyMapping(FileName)
    -> Bonsai.IO.CsvReader(FileName=H:\Temp\Analysis\C11_Hab_2022-08-17T10_49_25_box.csv, ListSeparator=;, ScanPattern="%i,%i", SkipRows=1)
    -> SelectMany Read_Roi
        WorkflowInput Source1
        -> Merge
        -> InputMapping(X(Selector=Item1), Y(Selector=Item2))
        -> Bonsai.Vision.CreatePoint(X=410, Y=231)
        -> ToArray
        -> WorkflowOutput
    -> ToArray
    -> PropertyMapping(Regions(Selector=it)) => #66
    #58, #66 -> Bonsai.Vision.RoiActivity => #67
      Regions
        ArrayOfPoint(Point(X=69, Y=23), Point(X=217, Y=23), Point(X=217, Y=229), Point(X=69, Y=229))
        ArrayOfPoint(Point(X=254, Y=247), Point(X=402, Y=247), Point(X=402, Y=453), Point(X=254, Y=453))
        ArrayOfPoint(Point(X=413, Y=247), Point(X=561, Y=247), Point(X=561, Y=453), Point(X=413, Y=453))
        ArrayOfPoint(Point(X=250, Y=24), Point(X=398, Y=24), Point(X=398, Y=230), Point(X=250, Y=230))
        ArrayOfPoint(Point(X=410, Y=25), Point(X=558, Y=25), Point(X=558, Y=231), Point(X=410, Y=231))
      Operation=Sum
    #58, #67 -> WithLatestFrom
    -> SelectMany => #69
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2)
        -> Concat => #3
        #1, #3 -> CombineLatest
        -> InputMapping(Selector=Item1, RegionOfInterest(Selector=Item2.Rect)) => #5
        Source2=#5 -> Bonsai.Vision.Crop(RegionOfInterest(X=410, Y=25, Width=149, Height=207))
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion => #9
        -> ToList
        -> WorkflowOutput
        #9 -> MemberSelector(Selector=Area)
    SubscribeSubject Savename => #70
    ExternalizedMapping(Format(DisplayName=Centroid)) => #71
    #70, #71 -> Format(Format={0}_centroid.csv)
    -> PropertyMapping(FileName(Selector=it)) => #73
    #69, #73 -> Bonsai.Scripting.PythonTextWriter
      Script:
        def process(value):
          coords = [str(mouse.Centroid.X)+","+str(mouse.Centroid.Y) if mouse.Area>50 else "0,0" for mouse in value]
          print ",".join(coords)
      FileName=H:\Temp\Analysis\C9_Test_2022-08-12T12_10_23_centroid.csv
      Append=false
      Suffix=None
    #69 -> Bonsai.Scripting.IronPython.PythonTransform => #75
      Script:
        import clr
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import *
        from System import Tuple, Array, Single
        coords = None

        @returns(Array[Point2f])
        def process(value):
          coords = [mouse.Centroid if (mouse.Area>50) else Point2f.Zero for mouse in value]
          return Array[Point2f](coords)
    #75, #67 -> GroupWorkflow Cen_Vis
      Description:
        For visualization of centroid tracking.
        Value selects box to display based on ROI index.
        *** Disable during actual tracking. Introduces errors in frame.
      Workflow
        ExternalizedMapping(Value) => #0
        WorkflowInput Source1 => #1
        #0, #1 -> Index(Operand=IntProperty(Value=1))
        -> Condition => #3
            WorkflowInput Source1
            -> NotEqual(Operand=WorkflowProperty<OpenCV.Net.Point2f>(Value(X=0, Y=0)))
            -> WorkflowOutput
        WorkflowInput Source2 => #4
        #0, #4 -> Index(Operand=IntProperty(Value=1))
        -> MemberSelector(Selector=Rect) => #6
        -> PropertyMapping(RegionOfInterest(Selector=it)) => #7
        SubscribeSubject Video => #8
        #7, #8 -> Bonsai.Vision.Crop(RegionOfInterest(X=254, Y=247, Width=149, Height=207))
        -> InputMapping(Size(Selector=Size))
        -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=149, Height=207), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0))
        -> Bonsai.Vision.Drawing.DrawCanvas => #12
        #3, #12 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import *

            # Accumulators for keeping history
            trajectory = None
            prevpoint = None
            color = Scalar.Rgb(255,0,0)
            thickness = 1

            @returns(IplImage)
            def process(value):
              global trajectory, prevpoint
              centroid = value.Item1
              image = value.Item2

              # Initialize trajectory image accumulator if needed
              if trajectory is None:
                trajectory = IplImage(image.Size, image.Depth, 3)
                trajectory.SetZero()

              # Draw point or line depending on whether there is a past history
              if prevpoint is None:
                CV.Circle(trajectory,Point(centroid),thickness,color,-1)
              else:
                CV.Line(trajectory,Point(prevpoint),Point(centroid),color,thickness)

              # Draw trajectory on top of image
              output = image.Clone()
              mask = IplImage(image.Size, image.Depth, 1)
              CV.CvtColor(trajectory,mask,ColorConversion.Bgr2Gray)
              CV.Threshold(mask,mask,0,255,ThresholdTypes.Binary)
              CV.Copy(trajectory,output,mask)

              # Update history for next drawing
              prevpoint = centroid
              return output

            # Reset accumulators
            def unload():
              global trajectory, prevpoint
              trajectory = None
              prevpoint = None
        -> Accumulate
        -> WorkflowOutput
        #6 -> MemberSelector(Selector="Width,Height")
        -> PropertyMapping(MaxX(Selector=Item1), MaxY(Selector=Item2)) => #18
        #3, #18 -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=149, MinY=0, MaxY=207, BinsX=10, BinsY=10, Normalize=false, Accumulate=true)
        -> Accumulate
    -> WorkflowOutput
-> Concat
